CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['SET UP DEFAULT INPUT/OUTPUT', 'MAke sure the input files also have the labelled images in the folders', 'NOTE: make sure to UPDATE METADATA in METADATA and NAMESandTYPES modules']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['(?P<sitype>[A-z]*-[A-z]*-*[A-z]*)_(?P<date>[0-9]{8})_(?P<Position>Pos[0-9]+)_(?P<clone>cl[0-9]+)', '—', 'Use regular expressions to match and name metadata in the file and path names. ', 'WINDOWS: (?P<sitype>[A-z]*)[\\\\/]([0-9]*)[\\\\/](Pos[0-9]*)$', '', '[//](?P<sitype>[A-z]*)[//](?P<date>[0-9]*)$', '', '']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<sitype>[A-z]*-*[A-z]*)_(?P<date>[0-9]{8})_(?P<Position>Pos[0-9]+)_(?P<clone>cl[0-9]+)
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<MovieName>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Channel 0 only for images without Label', 'Channel 1 for TRF1']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
    Assign a name to:Images matching rules
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    Match metadata:[{u'H2B': u'MovieName'}, {u'H2B': u'T'}]
    Image set matching method:Metadata
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "1")
    Name to assign these images:H2B
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '—', 'Group the analysis by the ‘MovieName’ metadata so that each movie is analysed seaprarely', 'important for TRACKING (you don’t want to track outside your movie)']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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:MovieName

Smooth:[module_num:5|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
    Select the input image:H2B
    Name the output image:H2B_Smooth4
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:4
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
Smooth:[module_num:6|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
    Select the input image:H2B
    Name the output image:H2B_Smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:4
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
Resize:[module_num:7|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notes:['changed from 0.15 to 0.25', 'changed from H2B_smooth to H2B']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
    Select the input image:H2B_Smooth4
    Name the output image:H2B_Resize
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.20
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

ClassifyPixels-Unet:[module_num:8|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
    Select the input image:H2B_Resize
    Name the output image:H2B_ClassifyPixelsUnet

Resize:[module_num:9|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
    Select the input image:H2B_ClassifyPixelsUnet
    Name the output image:H2B_Upsize
    Resizing method:Resize by specifying desired final dimensions
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    Interpolation method:Nearest Neighbor
    Method to specify the dimensions:Image
    Select the image with the desired dimensions:H2B
    Additional image count:0

ColorToGray:[module_num:10|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
    Select the input image:H2B_Upsize
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:No
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    Convert green to gray?:Yes
    Name the output image:H2B_UNET
    Convert blue to gray?:No
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
IdentifyPrimaryObjects:[module_num:11|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notes:['working: 35-250, 1 , 1,  0.15 - 1 (0.2 while working did split some mitotics)', '0.1 is good and was used to generate outlines for classification', 'but 0.2 is more stringent (keeps to brighter areas) and can be extended at step afterwards anyways to better segment "fingers"', '', 'previous settings: cgange from 40-250 to 30-250 for small anaphase in siNuMa 20190524 pos06 (old 20-250)', 'check if not bigger problems of splitting', '1', '1', '0.1-1']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
    Select the input image:H2B_UNET
    Name the primary objects to be identified:NucleiUnet
    Typical diameter of objects, in pixel units (Min,Max):35,250
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.15,1.0
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
IdentifySecondaryObjects:[module_num:12|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notes:['NucleiUnet2: propagate on 4 median smooth image LINUX', 'on PC: firm up segmentation and filter according to H2B or TRF1 (depending...)', '', 'took a higher lower threshold on purpose (PC pipeline has secondary object identification from Unet2 labels)']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enabled:False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
    Select the input objects:NucleiUnet
    Name the objects to be identified:NucleiUnet2
    Select the method to identify the secondary objects:Propagation
    Select the input image:H2B_Smooth4
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.02,1.0
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
ConvertObjectsToImage:[module_num:13|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
    Select the input objects:NucleiUnet
    Name the output image:NucleiUnet1
    Select the color format:uint16
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:NucleiUnet1
    Select method for constructing file names:Single name
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    Enter single file name:\g<MovieName>_Unet-label-\g<T>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|\g<MovieName>_Unet1
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
CreateBatchFiles:[module_num:15|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:/home/dolivierhub/data/input
    Cluster root path:/home/dolivierhub/data/input
