CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:406
GitHash:
ModuleCount:45
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['SET UP DEFAULT INPUT/OUTPUT', 'MAke sure the input files also have the labelled images in the folders', 'NOTE: make sure to UPDATE METADATA in METADATA and NAMESandTYPES modules']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['âx80x94', 'Use regular expressions to match and name metadata in the file and path names. ', '(?P<sitype>[A-z]*)[/]([0-9]*)[/](Pos[0-9]*)$ MAC', '', 'PC: ([A-Z]:.*)(?P<sitype>[A-z]*)$', '', '', '', '']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:4
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<sitype>[A-z]*-*[A-z]*)_(?P<date>[0-9]{8})_(?P<Position>Pos[0-9]+)_(?P<clone>cl[0-9]+)
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<MovieName>.*)_Unet-label-(?P<LabelTime>[0-9]+).
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "-label-")
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<MovieName>.*).tif
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file doesnot contain "label")
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
NamesAndTypes:[module_num:3|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notes:['Import Nuclei as Objects - only images containing Label ', 'Channel 0 only for images without Label']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
    Assign a name to:Images matching rules
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    Match metadata:[{'TRF1': 'MovieName', 'NucleiUnet1': 'MovieName', 'H2B': 'MovieName'}, {'TRF1': 'T', 'NucleiUnet1': 'LabelTime', 'H2B': 'T'}]
    Image set matching method:Metadata
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "0") (file doesnot contain "label")
    Name to assign these images:TRF1
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (metadata does C "1")
    Name to assign these images:H2B
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "label")
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    Name to assign these objects:NucleiUnet1
    Select the image type:Objects
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', 'âx80x94', 'Group the analysis by the âx80x98MovieNameâx80x99 metadata so that each movie is analysed seaprarely', 'important for TRACKING (you donâx80x99t want to track outside your movie)']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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:MovieName

Smooth:[module_num:5|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notes:['Used gaussian in the past - filter secondary at 0.015', 'but median gives smoother outlines with secondary at 0.01 (would need to check classifier again on this)']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
    Select the input image:H2B
    Name the output image:H2B_Smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
OverlayObjects:[module_num:6|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notes:['for visual control (optional)']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enabled:False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
    Input:H2B_Smooth
    Name the output image:OverlayObjects
    Objects:NucleiUnet1
    Opacity:0.2

Smooth:[module_num:7|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notes:['1 doesnt do much', '1.5 good', '2 maybe too much for metaphase trf1 signal']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
    Select the input image:TRF1
    Name the output image:TRF1_Smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
Smooth:[module_num:8|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notes:['to filter according to H2B intensity']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
    Select the input image:H2B
    Name the output image:H2B_SmoothFilter20Med
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:20
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
Smooth:[module_num:9|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notes:['to filter according to TRF1 intensity and get rid of low intensity (but not mitotics)']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
    Select the input image:TRF1
    Name the output image:TRF1_Smooth20MedFilter
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:20
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
RescaleIntensity:[module_num:10|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
    Select the input image:H2B
    Name the output image:H2B_RawRescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:11|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
    Select the input image:TRF1_Smooth
    Name the output image:TRF1_SmoothRescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:12|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
    Select the input image:H2B_Smooth
    Name the output image:H2B_SmoothRescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifySecondaryObjects:[module_num:13|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notes:['0.01 good but lots of low int areas but OK if use median filter ', '0.015 closer to outline']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
    Select the input objects:NucleiUnet1
    Name the objects to be identified:NucleiUnet2
    Select the method to identify the secondary objects:Propagation
    Select the input image:H2B_Smooth
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.01,1.0
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
EditObjectsManually:[module_num:14|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enabled:False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
    Select the objects to be edited:Nuclei_preFilter
    Name the edited objects:Nuclei_preFilterEdited
    Numbering of the edited objects:Retain
    Display a guiding image?:Yes
    Select the guiding image:H2B_SmoothRescaleIntensity
    Allow overlapping objects?:No

MeasureObjectIntensity:[module_num:15|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notes:['optional to filter according to GFP intensity']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
    Select images to measure:TRF1_Smooth20MedFilter
    Select objects to measure:NucleiUnet2

FilterObjects:[module_num:16|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notes:['remove low intensity TRF1 (in medium to low intensity chrry', 'in high cherry can not remove low trf1 due to collection of cherry signal in GFP', '', "0.0005 for classification (ie take also TRF1 neg nuclei as don't care to train classifier on H2B)", '0.0025 low stringency', '0.003 best compromise', '0.004 for high strigency']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
    Select the objects to filter:NucleiUnet2
    Name the output objects:NucleiTRF1filtered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MaxIntensity_TRF1_Smooth20MedFilter
    Filter using a minimum measurement value?:Yes
    Minimum value:0.003
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:17|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notes:['for classification: use NucleiUnet2 (no TRF1 filtering step)', 'for running use Nuclei_TRF1filtered (TRF1 filtering at 0.0032)']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
    Select images to measure:H2B_SmoothFilter20Med
    Select objects to measure:NucleiTRF1filtered

FilterObjects:[module_num:18|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notes:['0.004 H2B filter', 'can be more stringent if needed for now intensity based H2B filtering works', '0.01 good to remove low H2B / 0.008 to keep low but not tooooo low', '0.015 high stringency --> might lead to bug if results in no objects in one frame', '', 'for running use Nuclei_TRF1filtered (TRF1 filtering at 0.0032)', '']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
    Select the objects to filter:NucleiTRF1filtered
    Name the output objects:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_H2B_SmoothFilter20Med
    Filter using a minimum measurement value?:Yes
    Minimum value:0.011
    Filter using a maximum measurement value?:No
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
OverlayOutlines:[module_num:19|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notes:['for control only - uncheck for running pipeline']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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:H2B_SmoothRescaleIntensity
    Name the output image:NucleiOverlayH2BControl
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:yellow
    Select objects to display:Nuclei

OverlayOutlines:[module_num:20|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notes:['for control only - uncheck for running pipeline']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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:TRF1_SmoothRescaleIntensity
    Name the output image:NucleiOverlayTRF1Control
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:yellow
    Select objects to display:Nuclei

TrackObjects:[module_num:21|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notes:['']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
    Choose a tracking method:LAP
    Select the objects to track:Nuclei
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    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:NucleiTracked
    Select the movement model:Both
    Number of standard deviations for search radius:35
    Search radius limit, in pixel units (Min,Max):20,120
    Run the second phase of the LAP algorithm?:Yes
    Gap closing cost:80
    Split alternative cost:1
    Merge alternative cost:1
    Maximum gap displacement, in pixel units:40
    Maximum split score:1
    Maximum merge score:1
    Maximum temporal gap, in frames:3
    Filter objects by lifetime?:No
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    Mitosis alternative cost:160
    Maximum mitosis distance, in pixel units:150
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
EnhanceOrSuppressFeatures:[module_num:22|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notes:['feature size 10 crops telomeres too much (used in 1st pass)', 'decided to use feature size 25 after looking at prophase and metapahse cells (plus increased stringency on TRF1 levels)']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
    Select the input image:TRF1_Smooth
    Name the output image:TRF1_Enhanced
    Select the operation:Enhance
    Feature size:25
    Feature type:Speckles
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    Speed and accuracy:Fast
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
MaskImage:[module_num:23|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notes:['use NUCLEI as MASK on TRF1 signal -> only take TRF1 signal inside nuclei']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
    Select the input image:TRF1_Enhanced
    Name the output image:TRF1_Masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:24|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notes:['identify Telomere using ROBUST BACKGROUNd: assumes most of the image is BG and you have small area with signal', 'âx80x94> good for spots', 'separate the spots via intensity coz often neighbouring telomeres dont have same intensitz']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
    Select the input image:TRF1_Masked
    Name the primary objects to be identified:Telomere
    Typical diameter of objects, in pixel units (Min,Max):2,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.005,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2
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
MeasureObjectSizeShape:[module_num:25|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notes:['Measure the morphology of each nuclei', '(telomere for full pipeline)']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
    Select object sets to measure:Nuclei, Telomere
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureGranularity:[module_num:26|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
    Select images to measure:H2B_Smooth
    Measure within objects?:Yes
    Select objects to measure:Nuclei
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectIntensityDistribution:[module_num:27|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notes:['Zernikes - used in the classification. ', '', 'Can try if get good classification without them, but until then, keep it in here']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
    Select images to measure:H2B_Smooth
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectIntensity:[module_num:28|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notes:['']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
    Select images to measure:TRF1_Smooth, H2B_Smooth
    Select objects to measure:Nuclei, Telomere

FilterObjects:[module_num:29|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
    Select the objects to filter:Nuclei
    Name the output objects:interphase
    Select the filtering mode:Rules
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    Select the location of the rules or classifier file:Elsewhere...|D:\\_PIPELINES\\NucleoTeloTrack_working
    Rules or classifier file name:FGB50_Set3filtered_int_pro_prometa_ana-telo_meta_RULES.txt
    Class number:1
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    Additional object count:0
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
FilterObjects:[module_num:30|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
    Select the objects to filter:Nuclei
    Name the output objects:prophase
    Select the filtering mode:Rules
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    Select the location of the rules or classifier file:Elsewhere...|D:\\_PIPELINES\\NucleoTeloTrack_working
    Rules or classifier file name:FGB50_Set3filtered_int_pro_prometa_ana-telo_meta_RULES.txt
    Class number:2
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    Additional object count:0
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
FilterObjects:[module_num:31|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
    Select the objects to filter:Nuclei
    Name the output objects:prometaphase
    Select the filtering mode:Rules
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    Select the location of the rules or classifier file:Elsewhere...|D:\\_PIPELINES\\NucleoTeloTrack_working
    Rules or classifier file name:FGB50_Set3filtered_int_pro_prometa_ana-telo_meta_RULES.txt
    Class number:3
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    Additional object count:0
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
FilterObjects:[module_num:32|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notes:['ana_telophase']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
    Select the objects to filter:Nuclei
    Name the output objects:anaphase
    Select the filtering mode:Rules
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    Select the location of the rules or classifier file:Elsewhere...|D:\\_PIPELINES\\NucleoTeloTrack_working
    Rules or classifier file name:FGB50_Set3filtered_int_pro_prometa_ana-telo_meta_RULES.txt
    Class number:4
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    Additional object count:0
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
FilterObjects:[module_num:33|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
    Select the objects to filter:Nuclei
    Name the output objects:metaphase
    Select the filtering mode:Rules
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    Select the location of the rules or classifier file:Elsewhere...|D:\\_PIPELINES\\NucleoTeloTrack_working
    Rules or classifier file name:FGB50_Set3filtered_int_pro_prometa_ana-telo_meta_RULES.txt
    Class number:5
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    Additional object count:0
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
ConvertObjectsToImage:[module_num:34|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
    Select the input objects:Nuclei
    Name the output image:Nuclei_Label
    Select the color format:uint16
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
SaveImages:[module_num:35|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notes:["so don't have to redo segmentation and filtering"]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
    Select the type of image to save:Image
    Select the image to save:Nuclei_Label
    Select method for constructing file names:Single name
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    Enter single file name:\g<MovieName>_Nuclei-label-\g<T>
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|2_01Primary_NucLabel\\\g<MovieName>_NucleiLabel
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
RelateObjects:[module_num:36|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notes:['if get measurement - will have per nucleus measurements']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
    Parent objects:Nuclei
    Child objects:Telomere
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
OverlayOutlines:[module_num:37|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notes:['To only have telomeres and Nuclei on one overlay image (optional)']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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:TRF1_SmoothRescaleIntensity
    Name the output image:NucleiTelomereOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FB00EB
    Select objects to display:Nuclei
    Select outline color:Green
    Select objects to display:Telomere

SaveImages:[module_num:38|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:NucleiTelomereOverlay
    Select method for constructing file names:Single name
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    Enter single file name:\g<sitype>_\g<MovieName>_NucTel_\g<T>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|RESULTS/\g<sitype>_\g<MovieName>/NucTel
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:39|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notes:['Classes from CPA classfication (for data alignement']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:TRF1_SmoothRescaleIntensity
    Name the output image:NucleiClasses_Telomere_Overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#50B64E
    Select objects to display:interphase
    Select outline color:#6B6BB6
    Select objects to display:prophase
    Select outline color:#FF8000
    Select objects to display:prometaphase
    Select outline color:yellow
    Select objects to display:metaphase
    Select outline color:#FF0080
    Select objects to display:anaphase
    Select outline color:green
    Select objects to display:Telomere

SaveImages:[module_num:40|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
    Select the type of image to save:Image
    Select the image to save:NucleiClasses_Telomere_Overlay
    Select method for constructing file names:Single name
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    Enter single file name:\g<MovieName>_classtelo_\g<T>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|\g<MovieName>/\g<MovieName>_NucleiClassesTelo
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:41|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:H2B_SmoothRescaleIntensity
    Name the output image:NucleiClasses_Telomere_H2BOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#50B64E
    Select objects to display:interphase
    Select outline color:#6B6BB6
    Select objects to display:prophase
    Select outline color:#FF8000
    Select objects to display:prometaphase
    Select outline color:yellow
    Select objects to display:metaphase
    Select outline color:#FF0080
    Select objects to display:anaphase
    Select outline color:green
    Select objects to display:Telomere

SaveImages:[module_num:42|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
    Select the type of image to save:Image
    Select the image to save:NucleiClasses_Telomere_H2BOverlay
    Select method for constructing file names:Single name
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    Enter single file name:\g<MovieName>_H2B-class-tel_\g<T>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|\g<MovieName>/\g<MovieName>_H2B-class-telo
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:43|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notes:['TEMP']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
    Select the type of image to save:Image
    Select the image to save:NucleiTracked
    Select method for constructing file names:Single name
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    Enter single file name:\g<MovieName>_track_\g<T>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|\g<MovieName>/\g<MovieName>_Tracked
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:44|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|\g<MovieName>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Telomere
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

ExportToDatabase:[module_num:45|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|CLASSIFICATION
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:MyExpt
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:Nuclei,Telomere
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:Nuclei
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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