CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:406
GitHash:
ModuleCount:29
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['SET UP DEFAULT INPUT/OUTPUT', 'MAke sure the input files also have the labelled images in the folders', 'NOTE: make sure to UPDATE METADATA in METADATA and NAMESandTYPES modules']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['âx80x94', 'Use regular expressions to match and name metadata in the file and path names. ', '(?P<sitype>[A-z]*)[/]([0-9]*)[/](Pos[0-9]*)$ MAC', '', 'PC: ([A-Z]:.*)(?P<sitype>[A-z]*)$', '', '', '', '']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:4
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:No
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<sitype>[A-z]*-*[A-z]*)_(?P<date>[0-9]{8})_(?P<Position>Pos[0-9]+)_(?P<clone>cl[0-9]+)
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<MovieName>.*)_Unet-label-(?P<LabelTime>[0-9]+).
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "-label-")
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<MovieName>.*).tif
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file doesnot contain "label")
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
NamesAndTypes:[module_num:3|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notes:['Import Nuclei as Objects - only images containing Label ', 'Channel 0 only for images without Label']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
    Assign a name to:Images matching rules
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    Match metadata:[{u'TRF1': u'MovieName', u'NucleiUnet1': u'MovieName', u'H2B': u'MovieName'}, {u'TRF1': u'T', u'NucleiUnet1': u'LabelTime', u'H2B': u'T'}]
    Image set matching method:Metadata
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "1") (file doesnot contain "label")
    Name to assign these images:H2B
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (metadata does C "0") (file doesnot contain "label")
    Name to assign these images:TRF1
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "label")
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    Name to assign these objects:NucleiUnet1
    Select the image type:Objects
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', 'âx80x94', 'Group the analysis by the âx80x98MovieNameâx80x99 metadata so that each movie is analysed seaprarely', 'important for TRACKING (you donâx80x99t want to track outside your movie)']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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:MovieName

Smooth:[module_num:5|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
    Select the input image:H2B
    Name the output image:H2B_Smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
Smooth:[module_num:6|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notes:['to filter according to H2B intensity']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
    Select the input image:H2B
    Name the output image:H2B_SmoothFilter20Med
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:20
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
Smooth:[module_num:7|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
    Select the input image:TRF1
    Name the output image:TRF1_SmoothFilter20Med
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:20
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
RescaleIntensity:[module_num:8|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notes:['0.0625 to rescale to 12 bit (2^12 / 2^16)']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
    Select the input image:H2B
    Name the output image:H2B_RawRescaleIntensity
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Custom
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    Upper intensity limit for the input image:0.0625
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
RescaleIntensity:[module_num:9|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
    Select the input image:H2B_Smooth
    Name the output image:H2B_SmoothRescaleIntensity
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Custom
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    Upper intensity limit for the input image:0.0625
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
IdentifySecondaryObjects:[module_num:10|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
    Select the input objects:NucleiUnet1
    Name the objects to be identified:NucleiUnet2
    Select the method to identify the secondary objects:Propagation
    Select the input image:H2B_Smooth
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.01,1.0
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
EditObjectsManually:[module_num:11|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enabled:False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
    Select the objects to be edited:Nuclei_preFilter
    Name the edited objects:Nuclei_preFilterEdited
    Numbering of the edited objects:Retain
    Display a guiding image?:Yes
    Select the guiding image:H2B_SmoothRescaleIntensity
    Allow overlapping objects?:No

MeasureObjectIntensity:[module_num:12|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notes:['optional to filter according to GFP intensity']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
    Select images to measure:TRF1_SmoothFilter20Med
    Select objects to measure:NucleiUnet2

FilterObjects:[module_num:13|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notes:['remove low intensity TRF1 (in medium to low intensity chrry', 'in high cherry can not remove low trf1 due to collection of cherry signal in GFP', '', "0.0005 for classification (ie take also TRF1 neg nuclei as don't care to train classifier on H2B)", '0.0025 low stringency', '0.0032 best compromise', '0.004 for high strigency']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
    Select the objects to filter:NucleiUnet2
    Name the output objects:NucleiTRF1filtered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MaxIntensity_TRF1_SmoothFilter20Med
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0032
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:14|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notes:['for classification: use NucleiUnet2 (no TRF1 filtering step)', 'for running use Nuclei_TRF1filtered (TRF1 filtering at 0.0032)']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
    Select images to measure:H2B_SmoothFilter20Med
    Select objects to measure:NucleiTRF1filtered

FilterObjects:[module_num:15|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notes:['0.004 H2B filter', 'can be more stringent if needed for now intensity based H2B filtering works', '0.01 good to remove low H2B / 0.008 to keep low but not tooooo low', '0.015 high stringency', '', 'for classification: use NucleiUnet2 (no TRF1 filtering step)', 'for running use Nuclei_TRF1filtered (TRF1 filtering at 0.0032)', '']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
    Select the objects to filter:NucleiTRF1filtered
    Name the output objects:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_H2B_SmoothFilter20Med
    Filter using a minimum measurement value?:Yes
    Minimum value:0.01
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:16|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notes:['CLASSIFICATION ONLY (untick for full pipeline)']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
    Select object sets to measure:Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureGranularity:[module_num:17|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
    Select images to measure:H2B_Smooth
    Measure within objects?:Yes
    Select objects to measure:Nuclei
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectIntensityDistribution:[module_num:18|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notes:['Zernikes - used in the classification. Can try if get good classification without them, but until then, keep it in here']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
    Select images to measure:H2B_Smooth
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectIntensity:[module_num:19|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notes:['CLASSIFICATION ONLY']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
    Select images to measure:H2B_Smooth
    Select objects to measure:Nuclei

ConvertObjectsToImage:[module_num:20|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
    Select the input objects:Nuclei
    Name the output image:Nuclei_Label
    Select the color format:uint16
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
SaveImages:[module_num:21|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notes:["so don't have to redo segmentation and filtering"]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
    Select the type of image to save:Image
    Select the image to save:Nuclei_Label
    Select method for constructing file names:Single name
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    Enter single file name:\g<MovieName>_Nuclei-label-\g<T>
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<MovieName>/\g<MovieName>_NucleiLabel
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:22|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notes:['for classification H2B smoothed with 2 gaussian to avoid artefacts from airy lines', 'record path for CPA']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
    Select the type of image to save:Image
    Select the image to save:H2B_RawRescaleIntensity
    Select method for constructing file names:Single name
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    Enter single file name:\g<MovieName>_H2Braw-\g<T>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|\g<MovieName>/\g<MovieName>_H2Braw
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:23|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notes:['save PATH for CLASSIFICATION']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
    Select the type of image to save:Image
    Select the image to save:H2B_SmoothRescaleIntensity
    Select method for constructing file names:Single name
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    Enter single file name:\g<MovieName>_H2Bsmooth-\g<T>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|\g<MovieName>/\g<MovieName>_H2Bsmooth
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:24|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notes:['for classification']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
    Display outlines on a blank image?:Yes
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    Name the output image:Nuclei_Outline
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:yellow
    Select objects to display:Nuclei

SaveImages:[module_num:25|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notes:['save PATH for CLASSIFICATION']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
    Select the type of image to save:Image
    Select the image to save:Nuclei_Outline
    Select method for constructing file names:Single name
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    Enter single file name:\g<MovieName>_outline-\g<T>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|\g<MovieName>/\g<MovieName>_Outline
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:26|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:H2B_SmoothRescaleIntensity
    Name the output image:NucleiOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:yellow
    Select objects to display:Nuclei

SaveImages:[module_num:27|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notes:['for control - not needed for classification']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
    Select the type of image to save:Image
    Select the image to save:NucleiOverlay
    Select method for constructing file names:Single name
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    Enter single file name:\g<MovieName>_overlay_\g<T>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|\g<MovieName>/\g<MovieName>_overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:28|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|\g<MovieName>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:
    Overwrite existing files without warning?:No
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
ExportToDatabase:[module_num:29|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|CLASSIFICATION
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:MyExpt
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:Nuclei
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:Nuclei
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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