CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:50
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['SET UP DEFAULT INPUT/OUTPUT', 'MAke sure the input files also have the labelled images in the folders', 'NOTE: make sure to UPDATE METADATA in METADATA and NAMESandTYPES modules']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '—', 'Use regular expressions to match and name metadata in the file and path names. ', 'WINDOWS: (?P<sitype>[A-z]*)[\\\\/]([0-9]*)[\\\\/](Pos[0-9]*)$', '', '[//](?P<sitype>[A-z]*)[//](?P<date>[0-9]*)$', '', '']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:4
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<sitype>[A-z]*)[\/]([0-9]*)$
    Extract metadata from:All images
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    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<date>[0-9]{8})_(?P<Position>Pos[0-9]+)_(?P<clone>cl[0-9]+)
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<MovieName>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Channel 0 only for images without Label', 'Channel 1 for TRF1']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
    Assign a name to:Images matching rules
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    Match metadata:[{u'TRF1': u'MovieName', u'H2B': u'MovieName'}, {u'TRF1': u'T', u'H2B': u'T'}]
    Image set matching method:Metadata
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "0")
    Name to assign these images:TRF1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "1")
    Name to assign these images:H2B
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '—', 'Group the analysis by the ‘MovieName’ metadata so that each movie is analysed seaprarely', 'important for TRACKING (you don’t want to track outside your movie)']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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:MovieName

Smooth:[module_num:5|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
    Select the input image:H2B
    Name the output image:H2B_Smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
Smooth:[module_num:6|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
    Select the input image:H2B
    Name the output image:H2B_Smooth4
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:4
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
Smooth:[module_num:7|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notes:['1 doesnt do much', '1.5 good', '2 maybe too much for metaphase trf1 signal']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
    Select the input image:TRF1
    Name the output image:TRF1_Smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
Resize:[module_num:8|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
    Select the input image:H2B_Smooth4
    Name the output image:H2B_Resize
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.15
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

ClassifyPixels-Unet:[module_num:9|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
    Select the input image:H2B_Resize
    Name the output image:H2B_ClassifyPixelsUnet

Resize:[module_num:10|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
    Select the input image:H2B_ClassifyPixelsUnet
    Name the output image:H2B_Upsize
    Resizing method:Resize by specifying desired final dimensions
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    Interpolation method:Nearest Neighbor
    Method to specify the dimensions:Image
    Select the image with the desired dimensions:H2B
    Additional image count:0

ColorToGray:[module_num:11|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
    Select the input image:H2B_Upsize
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:No
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    Convert green to gray?:Yes
    Name the output image:H2B_UNET
    Convert blue to gray?:No
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
IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:H2B_UNET
    Name the primary objects to be identified:NucleiUnet
    Typical diameter of objects, in pixel units (Min,Max):20,250
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.1,1.0
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
IdentifySecondaryObjects:[module_num:13|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
    Select the input objects:NucleiUnet
    Name the objects to be identified:Nuclei_TBC
    Select the method to identify the secondary objects:Propagation
    Select the input image:H2B_Smooth
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.015,1.0
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
MeasureObjectIntensity:[module_num:14|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
    Hidden:1
    Select an image to measure:H2B_Smooth
    Select objects to measure:Nuclei_TBC

FilterObjects:[module_num:15|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
    Select the objects to filter:Nuclei_TBC
    Name the output objects:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_H2B_Smooth
    Filter using a minimum measurement value?:Yes
    Minimum value:0.005
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0

EditObjectsManually:[module_num:16|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enabled:False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
    Select the objects to be edited:Nuclei_TBC
    Name the edited objects:Nuclei_edited
    Numbering of the edited objects:Retain
    Display a guiding image?:Yes
    Select the guiding image:H2B_RescaleIntensity
    Allow overlapping objects?:No

TrackObjects:[module_num:17|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notes:['35-20-80-80-1-1-250-20-1-1-3-300', '06 may 2020: changed settings']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
    Choose a tracking method:LAP
    Select the objects to track:Nuclei
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    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:NucleiTracked
    Select the movement model:Both
    Number of standard deviations for search radius:35
    Search radius limit, in pixel units (Min,Max):20,120
    Run the second phase of the LAP algorithm?:Yes
    Gap closing cost:80
    Split alternative cost:1
    Merge alternative cost:1
    Maximum gap displacement, in pixel units:40
    Maximum split score:1
    Maximum merge score:1
    Maximum temporal gap, in frames:3
    Filter objects by lifetime?:No
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    Mitosis alternative cost:160
    Maximum mitosis distance, in pixel units:150
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
EnhanceOrSuppressFeatures:[module_num:18|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
    Select the input image:TRF1_Smooth
    Name the output image:TRF1_Enhanced
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast

MaskImage:[module_num:19|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notes:['use NUCLEI as MASK on TRF1 signal -> only take TRF1 signal inside nuclei']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
    Select the input image:TRF1_Enhanced
    Name the output image:TRF1_Masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:20|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notes:['identify Telomere using ROBUST BACKGROUNd: assumes most of the image is BG and you have small area with signal', '—> good for spots', 'separate the spots via intensity coz often neighbouring telomeres dont have same intensitz']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
    Select the input image:TRF1_Masked
    Name the primary objects to be identified:Telomere
    Typical diameter of objects, in pixel units (Min,Max):2,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0025,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2
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
MeasureObjectSizeShape:[module_num:21|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notes:['Measure the morphology of each nuclei &Telomere']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
    Select objects to measure:Nuclei
    Select objects to measure:Telomere
    Calculate the Zernike features?:No

MeasureGranularity:[module_num:22|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
    Image count:1
    Object count:1
    Select an image to measure:H2B_Smooth
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Nuclei

MeasureObjectIntensityDistribution:[module_num:23|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notes:['Zernikes - used in the classification. Can try if get good classification without them, but until then, keep it in here']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
    Hidden:1
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select an image to measure:H2B_Smooth
    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectIntensity:[module_num:24|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notes:['TELOMERE and Nuclei on gaussian blurred image of H2B and TRF1']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
    Hidden:2
    Select an image to measure:TRF1_Smooth
    Select an image to measure:H2B_Smooth
    Select objects to measure:Telomere
    Select objects to measure:Nuclei

FilterObjects:[module_num:25|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
    Select the objects to filter:Nuclei
    Name the output objects:interphase
    Select the filtering mode:Rules
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    Select the location of the rules or classifier file:Elsewhere...|/home/dolivierhub/CellProfiler_Pipelines/Rules
    Rules or classifier file name:Rules_interphase_pro_prometaphase_metaphase_ana_telo.txt
    Class number:1
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    Additional object count:0
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
FilterObjects:[module_num:26|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
    Select the objects to filter:Nuclei
    Name the output objects:prophase
    Select the filtering mode:Rules
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    Select the location of the rules or classifier file:Elsewhere...|/home/dolivierhub/CellProfiler_Pipelines/Rules
    Rules or classifier file name:Rules_interphase_pro_prometaphase_metaphase_ana_telo.txt
    Class number:2
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    Additional object count:0
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
FilterObjects:[module_num:27|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
    Select the objects to filter:Nuclei
    Name the output objects:prometaphase
    Select the filtering mode:Rules
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    Select the location of the rules or classifier file:Elsewhere...|/home/dolivierhub/CellProfiler_Pipelines/Rules
    Rules or classifier file name:Rules_interphase_pro_prometaphase_metaphase_ana_telo.txt
    Class number:3
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    Additional object count:0
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
FilterObjects:[module_num:28|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
    Select the objects to filter:Nuclei
    Name the output objects:metaphase
    Select the filtering mode:Rules
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    Select the location of the rules or classifier file:Elsewhere...|/home/dolivierhub/CellProfiler_Pipelines/Rules
    Rules or classifier file name:Rules_interphase_pro_prometaphase_metaphase_ana_telo.txt
    Class number:4
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    Additional object count:0
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
FilterObjects:[module_num:29|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
    Select the objects to filter:Nuclei
    Name the output objects:anaphase
    Select the filtering mode:Rules
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    Select the location of the rules or classifier file:Elsewhere...|/home/dolivierhub/CellProfiler_Pipelines/Rules
    Rules or classifier file name:Rules_interphase_pro_prometaphase_metaphase_ana_telo.txt
    Class number:5
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    Additional object count:0
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
FilterObjects:[module_num:30|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
    Select the objects to filter:Nuclei
    Name the output objects:telophase
    Select the filtering mode:Rules
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    Select the location of the rules or classifier file:Elsewhere...|/home/dolivierhub/CellProfiler_Pipelines/Rules
    Rules or classifier file name:Rules_interphase_pro_prometaphase_metaphase_ana_telo.txt
    Class number:6
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    Additional object count:0
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
RescaleIntensity:[module_num:31|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
    Select the input image:TRF1_Smooth
    Name the output image:TRF1_RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:32|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
    Select the input image:H2B_Smooth
    Name the output image:H2B_RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
RelateObjects:[module_num:33|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notes:['if get measurement - will have per nucleus measurements']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
    Parent objects:Nuclei
    Child objects:Telomere
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
OverlayOutlines:[module_num:34|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:TRF1_RescaleIntensity
    Name the output image:NucleiTelomereOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FB00EB
    Select objects to display:Nuclei
    Select outline color:Green
    Select objects to display:Telomere

SaveImages:[module_num:35|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
    Select the type of image to save:Image
    Select the image to save:NucleiTelomereOverlay
    Select method for constructing file names:Single name
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    Enter single file name:\g<MovieName>-\g<T>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|RESULTS/\g<sitype>/\g<date>/\g<Position>/NucTel
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:36|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notes:['Classes from CPA classfication (for data alignement']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:TRF1_RescaleIntensity
    Name the output image:NucleiClassesOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#EBFF12
    Select objects to display:interphase
    Select outline color:#12DBFF
    Select objects to display:prophase
    Select outline color:#41E69E
    Select objects to display:prometaphase
    Select outline color:#2CFF16
    Select objects to display:metaphase
    Select outline color:#FB00F7
    Select objects to display:anaphase
    Select outline color:#6600CC
    Select objects to display:telophase

SaveImages:[module_num:37|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notes:['CLASSES Nuclei overlay']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
    Select the type of image to save:Image
    Select the image to save:NucleiClassesOverlay
    Select method for constructing file names:Single name
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    Enter single file name:\g<MovieName>-class-\g<T>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|RESULTS/\g<sitype>/\g<date>/\g<Position>/NucleiClasses
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:38|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notes:['TEMP']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
    Select the type of image to save:Image
    Select the image to save:NucleiTracked
    Select method for constructing file names:Single name
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    Enter single file name:\g<MovieName>-track-\g<T>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|RESULTS/\g<sitype>/\g<date>/\g<Position>/Tracked
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
Tile:[module_num:39|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enabled:False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
    Select an input image:TRF1_RescaleIntensity
    Name the output image:Tiled_H2B_TRF1_track
    Tile assembly method:Within cycles
    Final number of rows:1
    Final number of columns:2
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:Yes
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:NucleiTelomereOverlay
    Select an additional image to tile:NucleiTracked

SaveImages:[module_num:40|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enabled:False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
    Select the type of image to save:Movie
    Select the image to save:Tiled_H2B_TRF1_track
    Select method for constructing file names:Single name
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    Enter single file name:\g<MovieName>-\g<T>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|RESULTS/\g<sitype>/\g<date>/\g<Position>/tile
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:41|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:H2B_Smooth
    Name the output image:NucleiOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:yellow
    Select objects to display:Nuclei

SaveImages:[module_num:42|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:NucleiOverlay
    Select method for constructing file names:Single name
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    Enter single file name:\g<MovieName>-\g<T>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|RESULTS/\g<sitype>/\g<date>/\g<Position>/overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:43|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
    Display outlines on a blank image?:Yes
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    Name the output image:NucleiOutline
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:yellow
    Select objects to display:Nuclei

SaveImages:[module_num:44|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notes:['RECORD path of outline for CPA']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
    Select the type of image to save:Image
    Select the image to save:NucleiOutline
    Select method for constructing file names:Single name
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    Enter single file name:\g<MovieName>-\g<T>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|RESULTS/\g<sitype>/\g<date>/\g<Position>/outline
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:45|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
    Select the type of image to save:Image
    Select the image to save:H2B_Smooth
    Select method for constructing file names:Single name
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    Enter single file name:\g<MovieName>-\g<T>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|RESULTS/\g<sitype>/\g<date>/\g<Position>/H2B-smooth
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ConvertObjectsToImage:[module_num:46|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
    Select the input objects:Nuclei
    Name the output image:NucleiLabel
    Select the color format:uint16
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
SaveImages:[module_num:47|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
    Select the type of image to save:Image
    Select the image to save:NucleiLabel
    Select method for constructing file names:Single name
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    Enter single file name:\g<MovieName>-Label-\g<T>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|\g<MovieName>-Labels
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:48|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|RESULTS/CSV/\g<sitype>/\g<MovieName>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:
    Overwrite existing files without warning?:No
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
ExportToDatabase:[module_num:49|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:siCTRL_191010_1_table_
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    Output file location:Default Output Folder sub-folder|RESULTS/DB
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:siCTRL_191010_1
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:Nuclei,Telomere,anaphase,interphase,metaphase,prometaphase,prophase,telophase
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:siCTRL_191010_1
    Which objects should be used for locations?:Nuclei
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
CreateBatchFiles:[module_num:50|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:/home/dolivierhub/data/input
    Cluster root path:/home/dolivierhub/data/input
